def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////// module baroreceptor firing rate from carotid and aortic arch pressures ///
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp baroreceptor_type as
    var t: second {pub: in};
    var P_sys: J_per_m3 {pub: in};
    var P_baro_init: J_per_m3 {pub: in};
    var P_baro: J_per_m3 {init: P_baro_init, pub: out};
    var f_ab: per_s {pub: out};
    var dP_sys_dt: J_per_m3s {pub: in};
    // Constants
    var P_nom: J_per_m3 {pub: in};
    var f_ab_min: per_s {pub: in};
    var f_ab_max: per_s {pub: in};
    var k_ab: J_per_m3 {pub: in};
    var tau_zb: second {pub: in};
    var tau_pb: second {pub: in};
    ode(P_baro, t) = (P_sys+tau_zb*dP_sys_dt-P_baro)/tau_pb;
    f_ab = (f_ab_min+f_ab_max*exp((P_baro-P_nom)/k_ab))/(1{dimensionless}+exp((P_baro-P_nom)/k_ab));
  enddef;

  def comp chemoreceptor_type as
    var t: second {pub: in};
    // inp variables
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var dot_C_CO2_a: per_s {pub: in};
    // output variables
    var X_O2: dimensionless {pub: out};
    var phi_stat: per_s {pub: out};
    var phi_CO2_dyn: per_s {init: 0.0, pub: out};
    var f_c_stat: per_s {pub: out};
    var f_c_dyn: per_s {pub: out};
    var f_apc: per_s {pub: out};
    var phi_apc: per_s {init: 0.0, pub: out};
    var P_O2_a: J_per_m3 {pub: out};
    // Constants
    var AA: dimensionless {pub: in};
    var BB: dimensionless {pub: in};
    var C_CO2_a_nom: dimensionless {pub: in};
    var K_O2: dimensionless {pub: in};
    var K_CO2: per_s {pub: in};
    var K_stat: per_s {pub: in};
    var K_dyn: per_s {pub: in};
    var tau_cap: second {pub: in};
    var tau_CO2_cc_dyn: dimensionless {pub: in};
    // equations
    X_O2 = AA*(1{dimensionless}-S_O2_a)+BB;
    phi_stat = K_CO2*(C_CO2_a-C_CO2_a_nom)*K_O2*(1{dimensionless}-exp(-X_O2/K_O2));
    f_c_stat = sel
      case C_CO2_a >= C_CO2_a_nom:
        K_stat*(1{dimensionless}-exp(-phi_stat/K_stat));
      otherwise:
        0{per_s};
    endsel;
    ode(phi_CO2_dyn, t) = (dot_C_CO2_a*tau_CO2_cc_dyn-phi_CO2_dyn)/tau_cap;
    f_c_dyn = K_dyn*(1{dimensionless}-exp(-phi_CO2_dyn/K_dyn));
    ode(phi_apc, t) = (f_c_stat+f_c_dyn-phi_apc)/tau_cap;
    f_apc = max(phi_apc, 0{per_s});
    // Calculate saturation
    var C_O2_a_diss: dimensionless {pub: out};
    var S_O2_a: dimensionless {pub: out};
    var Hgb: kg_per_m3 {pub: in};
    var alpha_O2: m3_per_J {pub: in};
    // should be handled in parameter.csv  = 2.33e-7 (per_pascal)
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1)+overcap_solubility*C_O2_a_extra_ub;
    // P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    // TODO I need to check this, it is different to the Ursino papers and to the gas exchange modules.
    C_O2_a_diss = sel
      case C_O2_sat-Hgb*1.34e-3{m3_per_kg}-P_O2_a*alpha_O2 >= 0{dimensionless}:
        P_O2_a*alpha_O2;
      otherwise:
        C_O2_sat-Hgb*1.34e-3{m3_per_kg};
    endsel;
    S_O2_a = (C_O2_a-C_O2_a_diss)/(Hgb*1.34e-3{m3_per_kg});
    // ____________ inverted dissociation curve below here___________
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    // including the below to avoid divide by zero problems. This probably isn't needed.
    var C_O2_a_capped: dimensionless {pub: out};
    var C_CO2_a_capped: dimensionless {pub: out};
    var C_O2_a_extra_ub: dimensionless {pub: out};
    var overcap_solubility: J_per_m3 {pub: in};
    var saturation_cap: dimensionless {pub: in};
    C_O2_a_capped = min(C_O2_sat*saturation_cap, C_O2_a);
    C_CO2_a_capped = min(C_CO2_sat*saturation_cap, C_CO2_a);
    // This is the amount that is extra in the plasma due to capping the amount that can be saturated.
    C_O2_a_extra_ub = max(C_O2_a-C_O2_sat*saturation_cap, 0{dimensionless});
    d_1 = max(k_1*pow(C_O2_a_capped/(C_O2_sat-C_O2_a_capped), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a_capped/(C_CO2_sat-C_CO2_a_capped), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp afferent_to_vagal_efferent_type as
    var t: second {pub: in};
    // Constants
    var f_ev_0: per_s {pub: in};
    var f_ev_inf: per_s {pub: in};
    var f_ab_0: per_s {pub: in};
    var theta_v: per_s {pub: in};
    var W_cv: dimensionless {pub: in};
    // var W_pv: dimensionless {pub: in}; not yet including lung stretch receptor effects
    var k_ev: per_s {pub: in};
    // Variables
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    // var f_ap: per_s {pub: in};
    var f_v: per_s {pub: out};
    f_v = (f_ev_0+f_ev_inf*exp((f_ab-f_ab_0)/k_ev))/(1{dimensionless}+exp((f_ab-f_ab_0)/k_ev))+W_cv*f_apc-theta_v;
    // + W_pv*f_ap
  enddef;

  def comp afferent_to_sympathetic_efferent_type as
    var t: second {pub: in};
    // Constants
    var f_es_0: per_s {pub: in};
    var f_es_inf: per_s {pub: in};
    var f_es_max: per_s {pub: in};
    var k_es: second {pub: in};
    // should be changed to second
    // var theta_s: per_s {pub: in}; //currently ignoring CNS
    var W_bs: dimensionless {pub: in};
    var W_cs: dimensionless {pub: in};
    // var W_cp: dimensionless {pub: in}; TODO cardiopulmonary and lungstretch signals need to be included.
    // var W_ls: dimensionless {pub: in};
    // Variables
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    // var f_ap: per_s {pub: in};
    var f_s_premax: per_s {pub: out};
    var f_s: per_s {pub: out};
    f_s_premax = f_es_inf+(f_es_0-f_es_inf)*exp(k_es*(W_bs*f_ab+W_cs*f_apc));
    // + w_cp*f_cp + w_ls*f_ls));
    // IGNORING CNS and LUNG STRETCH
    f_s = sel
      case f_s_premax <= f_es_max:
        f_s_premax;
      otherwise:
        f_es_max;
    endsel;
  enddef;

  def comp efferent_resistance_effector_Argus_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_theta: dimensionless {pub: in};
    var f_es_min: per_s {pub: in};
    var f_es_mid: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: dimensionless {pub: out};
    var sigma_theta: per_s {init: 0.0, pub: out};
    // Delta_theta now multiplies by the baseline resistance to calculate how much to add to allow for easier calibration.
    // Equations
    ode(sigma_theta, t) = (max(f_s-f_es_min, 0{per_s})-sigma_theta)/tau_theta;
    Delta_theta = G_theta*sigma_theta/(f_es_mid+sigma_theta);
  enddef;

  def comp efferent_resistance_effector_Ursino_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_theta: Js_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: Js_per_m6 {init: 0.0, pub: out};
    var sigma_theta: Js_per_m6 {pub: out};
    // Equations
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{Js_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp efferent_heart_elastance_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_theta: J_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: J_per_m6 {init: 0.0, pub: out};
    var sigma_theta: J_per_m6 {pub: out};
    // Equations
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp efferent_venous_us_volume_and_compliance_effector_Argus_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // IMPORTANT: THIS MODULE HAS BEEN MODIFIED TO CONTROL COMPLIANCE INSTEAD OF UNSTRESSED VOLUME. PARAMS ARE UNVALIDATED
    // Constants
    var G_theta_us: dimensionless {pub: in};
    var G_theta_compliance: dimensionless {pub: in};
    var f_es_min: per_s {pub: in};
    var f_es_mid: per_s {pub: in};
    var tau_theta_us: second {pub: in};
    var tau_theta_compliance: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta_us: dimensionless {pub: out};
    var sigma_theta_us: per_s {init: 0.0, pub: out};
    var Delta_theta_compliance: dimensionless {pub: out};
    var sigma_theta_compliance: per_s {init: 0.0, pub: out};
    // Equations
    // TODO for both of the below, it probably shouln't be additive. It should be impossible to get to negative.
    // changed the below from ln to hill function so we can limit the amount it can change compliance and us volume. Now G_theta_us is the maximum amount of change
    // that can occur to the us volume
    // G_theta is now a max proportion of us volume or compliance that can be decreased.
    ode(sigma_theta_us, t) = (max(f_s-f_es_min, 0{per_s})-sigma_theta_us)/tau_theta_us;
    Delta_theta_us = G_theta_compliance*sigma_theta_us/(f_es_mid+sigma_theta_us);
    ode(sigma_theta_compliance, t) = (max(f_s-f_es_min, 0{per_s})-sigma_theta_compliance)/tau_theta_compliance;
    Delta_theta_compliance = G_theta_compliance*sigma_theta_compliance/(f_es_mid+sigma_theta_compliance);
  enddef;

  def comp efferent_heart_period_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_Ts: second {pub: in};
    var G_Tv: s2 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_Ts: second {pub: in};
    var tau_Tv: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var f_v: per_s {pub: in};
    var Delta_Ts: second {init: 0.0, pub: out};
    var Delta_Tv: second {init: 0.0, pub: out};
    var Delta_T: second {pub: out};
    var sigma_Ts: second {pub: out};
    var sigma_Tv: second {pub: out};
    // Equations
    sigma_Ts = sel
      case f_s >= f_es_min:
        G_Ts*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{second};
    endsel;
    ode(Delta_Ts, t) = (-Delta_Ts+sigma_Ts)/tau_Ts;
    sigma_Tv = G_Tv*f_v;
    // DELAY IGNORED
    ode(Delta_Tv, t) = (-Delta_Tv+sigma_Tv)/tau_Tv;
    Delta_T = Delta_Tv+Delta_Ts;
  enddef;

  def comp local_flow_control_muscle_type as
    var t: second {pub: in};
    var x_O2: dimensionless {init: 0.0, pub: out};
    var phi_P_CO2_a: dimensionless {pub: out};
    var x_CO2: dimensionless {init: 0.0, pub: out};
    var C_O2_p: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var R_local_multiplier: dimensionless {pub: out};
    var P_O2_a: J_per_m3 {pub: in};
    // Constants
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var k_CO2_m: J_per_m3 {pub: in};
    var C_O2_vm_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_m: dimensionless {pub: in};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vm_nom)/tau_O2;
    phi_P_CO2_a = (1{dimensionless}-exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m))/(1{dimensionless}+exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m));
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    R_local_multiplier = (1{dimensionless}+x_CO2)/(1{dimensionless}-g_O2_m*x_O2);
  enddef;

  def comp local_flow_control_brain_type as
    var t: second {pub: in};
    var x_O2: dimensionless {init: 0.0, pub: out};
    var phi_P_CO2_a: dimensionless {pub: out};
    var x_CO2: dimensionless {init: 0.0, pub: out};
    var C_O2_p: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: in};
    var R_local_multiplier: dimensionless {pub: out};
    var P_O2_a: J_per_m3 {pub: in};
    var G_p: dimensionless {pub: out};
    // Constants
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    // Unit consistancy in ln() - may need to add the unit
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(1{m3_per_J}*P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(1{m3_per_J}*P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
  enddef;

  def comp afferent_to_respiratory_efferent_type as
    var t: second {pub: in};
    // constants
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var K_c_resp: m3_per_Js {pub: in};
    var f_apc_nom: per_s {pub: in};
    var K_p_resp: dimensionless {pub: in};
    // boundary conditions/inputs
    var P_CO2_a: J_per_m3 {pub: in};
    var P_O2_a: J_per_m3 {pub: in};
    var f_apc: per_s {pub: in};
    // variables
    var u_p_resp: per_s {pub: out};
    var u_c_resp: per_s {pub: out};
    // TODO these need time dynamics to delay them.
    // TODO change these to frequencies to properly model afferent to efferent.
    u_c_resp = K_c_resp*(P_CO2_a-P_CO2_a_nom);
    u_p_resp = K_p_resp*(f_apc-f_apc_nom);
  enddef;

  def comp efferent_respiratory_effector_type as
    var t: second {pub: in};
    // peripheral chemo constants
    // var D_p: second {pub: in}; DELAY NOT APPLIED
    var G_pA: Js_per_m3 {pub: in};
    var G_pf: dimensionless {pub: in};
    var tau_pA_min: second {pub: in};
    var tau_pA_max: second {pub: in};
    var tau_pA: second {pub: out};
    var tau_pf_min: second {pub: in};
    var tau_pf_max: second {pub: in};
    var tau_pf: second {pub: out};
    // unit inconsistancy for 0 resolved
    tau_pA = sel
      case u_p_resp >= 0{per_s}:
        tau_pA_max;
      otherwise:
        tau_pA_min;
    endsel;
    tau_pf = sel
      case u_p_resp >= 0{per_s}:
        tau_pf_max;
      otherwise:
        tau_pf_min;
    endsel;
    // central chemo constants
    //  var D_c: second {pub: in}; DELAY NOT APPLIED
    var G_cA_max: Js_per_m3 {pub: in};
    var G_cA: Js_per_m3 {pub: out};
    var G_cf_max: dimensionless {pub: in};
    var G_cf: dimensionless {pub: out};
    var tau_cA_max: second {pub: in};
    var tau_cA_min: second {pub: in};
    var tau_cA: second {pub: out};
    var tau_cf_max: second {pub: in};
    var tau_cf_min: second {pub: in};
    var tau_cf: second {pub: out};
    var u_CO2_c_thresh: per_s {pub: in};
    G_cA = sel
      case u_c_resp > u_CO2_c_thresh:
        G_cA_max;
      otherwise:
        0{Js_per_m3};
    endsel;
    G_cf = sel
      case u_c_resp > u_CO2_c_thresh:
        G_cf_max;
      otherwise:
        0{dimensionless};
    endsel;
    tau_cA = sel
      case u_c_resp > u_CO2_c_thresh:
        tau_cA_max;
      otherwise:
        tau_cA_min;
    endsel;
    tau_cf = sel
      case u_c_resp > u_CO2_c_thresh:
        tau_cf_max;
      otherwise:
        tau_cf_min;
    endsel;
    // boundary conditions/inputs
    var u_c_resp: per_s {pub: in};
    var u_p_resp: per_s {pub: in};
    // variables
    var Delta_RR_c: Hz {init: 0.0, pub: out};
    var Delta_RR_p: Hz {init: 0.0, pub: out};
    var Delta_RR_resp: per_s {pub: out};
    var alpha_P_mus_c: dimensionless {init: 0.0, pub: out};
    var alpha_P_mus_p: dimensionless {init: 0.0, pub: out};
    var alpha_P_mus: dimensionless {pub: out};
    ode(Delta_RR_c, t) = (-Delta_RR_c+G_cf*u_c_resp)/tau_cf;
    ode(Delta_RR_p, t) = (-Delta_RR_p+G_pf*u_p_resp)/tau_pf;
    ode(alpha_P_mus_c, t) = (-alpha_P_mus_c+G_cA*u_c_resp)/tau_cA;
    ode(alpha_P_mus_p, t) = (-alpha_P_mus_p+G_pA*u_p_resp)/tau_pA;
    var Delta_RR_resp_max: per_s {pub: in};
    var alpha_P_mus_max: dimensionless {pub: in};
    var Delta_RR_resp_min: per_s {pub: in};
    var alpha_P_mus_min: dimensionless {pub: in};
    Delta_RR_resp = min(max(Delta_RR_c+Delta_RR_p, Delta_RR_resp_min), Delta_RR_resp_max);
    alpha_P_mus = min(max(alpha_P_mus_c+alpha_P_mus_p, alpha_P_mus_min), alpha_P_mus_max);
  enddef;

  def comp efferent_respiratory_effector_Gee_Argus_2026_type as
    var t: second {pub: in};
    // peripheral chemo constants
    // var D_p: second {pub: in}; DELAY NOT APPLIED
    var G_pA: second {pub: in};
    var G_pf: dimensionless {pub: in};
    var tau_pA_min: second {pub: in};
    var tau_pA_max: second {pub: in};
    var tau_pA: second {pub: out};
    var tau_pf_min: second {pub: in};
    var tau_pf_max: second {pub: in};
    var tau_pf: second {pub: out};
    // unit inconsistancy for 0 resolved
    tau_pA = sel
      case u_p_resp >= 0{per_s}:
        tau_pA_max;
      otherwise:
        tau_pA_min;
    endsel;
    tau_pf = sel
      case u_p_resp >= 0{per_s}:
        tau_pf_max;
      otherwise:
        tau_pf_min;
    endsel;
    // central chemo constants
    //  var D_c: second {pub: in}; DELAY NOT APPLIED
    var G_cA_max: second {pub: in};
    var G_cA: second {pub: out};
    var G_cf_max: dimensionless {pub: in};
    var G_cf: dimensionless {pub: out};
    var tau_cA_max: second {pub: in};
    var tau_cA_min: second {pub: in};
    var tau_cA: second {pub: out};
    var tau_cf_max: second {pub: in};
    var tau_cf_min: second {pub: in};
    var tau_cf: second {pub: out};
    var u_CO2_c_thresh: per_s {pub: in};
    G_cA = sel
      case u_c_resp > u_CO2_c_thresh:
        G_cA_max;
      otherwise:
        0{second};
    endsel;
    G_cf = sel
      case u_c_resp > u_CO2_c_thresh:
        G_cf_max;
      otherwise:
        0{dimensionless};
    endsel;
    tau_cA = sel
      case u_c_resp > u_CO2_c_thresh:
        tau_cA_max;
      otherwise:
        tau_cA_min;
    endsel;
    tau_cf = sel
      case u_c_resp > u_CO2_c_thresh:
        tau_cf_max;
      otherwise:
        tau_cf_min;
    endsel;
    // boundary conditions/inputs
    var u_c_resp: per_s {pub: in};
    var u_p_resp: per_s {pub: in};
    // variables
    var Delta_RR_c: Hz {init: 0.0, pub: out};
    var Delta_RR_p: Hz {init: 0.0, pub: out};
    var Delta_RR_resp: per_s {pub: out};
    var alpha_P_mus_c: dimensionless {init: 1.0, pub: out};
    var alpha_P_mus_p: dimensionless {init: 1.0, pub: out};
    var alpha_P_mus: dimensionless {pub: out};
    ode(Delta_RR_c, t) = (-Delta_RR_c+G_cf*u_c_resp)/tau_cf;
    ode(Delta_RR_p, t) = (-Delta_RR_p+G_pf*u_p_resp)/tau_pf;
    ode(alpha_P_mus_c, t) = (1{dimensionless}-alpha_P_mus_c+G_cA*u_c_resp)/tau_cA;
    ode(alpha_P_mus_p, t) = (1{dimensionless}-alpha_P_mus_p+G_pA*u_p_resp)/tau_pA;
    var Delta_RR_resp_max: per_s {pub: in};
    var alpha_P_mus_max: dimensionless {pub: in};
    var Delta_RR_resp_min: per_s {pub: in};
    var alpha_P_mus_min: dimensionless {pub: in};
    Delta_RR_resp = min(max(Delta_RR_c+Delta_RR_p, Delta_RR_resp_min), Delta_RR_resp_max);
    alpha_P_mus = min(max(alpha_P_mus_c*alpha_P_mus_p, alpha_P_mus_min), alpha_P_mus_max);
  enddef;
  // heart period ///////////////////////////////////////////////////////////////////////////////////////////////////////////////
  // Ts -----------------------------------------
  //  s.2
  // ventricular contractility //////////////////////////////////////////////////////////////////////////////////////////////////
  // Emaxlv_symp ------------------------------------------------------------
  // s.55

  def comp heart_effector_Gee2023 as
    var sigma_Es: J_per_m6 {pub: out};
    var G_Es: J_per_m6 {pub: in};
    var f_esh: Hz {pub: in};
    var t: second {pub: in};
    var f_es_min: Hz {pub: in};
    // unit consistancy for ln
    sigma_Es = sel
      case f_esh >= f_es_min:
        G_Es*ln(1{second}*(f_esh-f_es_min+1{Hz}));
      otherwise:
        0{J_per_m6};
    endsel;
    // s.56
    var Delta_Es: J_per_m6 {init: 0.0, pub: out};
    var tau_Es: second {pub: in};
    ode(Delta_Es, t) = 1{dimensionless}/tau_Es*(-Delta_Es+sigma_Es);
    // TODO I think it would be better if we changed the control so that it uses a sigmoid rather than a ln, so
    // that the maximum control can be set. G_Es is now the maximum fraction of increase in E_lv that can occur.
    //  ode(sigma_Es, t)         = (max(f_esh-f_esh_min, 0{per_s})-sigma_Es)/tau_Es;
    // Delta_Es                 = G_Es*sigma_Es/(f_esh_min+sigma_Es);
    // Emaxlv_vag--------------------------------------------------------------------------------
    // s.57
    var sigma_Ev: J_per_m6 {pub: out};
    var G_Ev: Js_per_m6 {pub: in};
    var f_PNDMV_filt: Hz {pub: in};
    sigma_Ev = G_Ev*f_PNDMV_filt;
    // s. 58
    var Delta_Ev: J_per_m6 {init: 0.0, pub: out};
    var tau_Ev: second {pub: in};
    ode(Delta_Ev, t) = 1{dimensionless}/tau_Ev*(-Delta_Ev+sigma_Ev);
    var Delta_Emax: J_per_m6 {pub: out};
    var scale: dimensionless {pub: in};
    Delta_Emax = scale*(Delta_Es+Delta_Ev);
  enddef;

  def comp heart_effector_Gee2023_INV as
    var inv_sigma_Es: J_per_m6 {pub: out};
    var inv_G_Es: m6_per_J {pub: in};
    var f_esh: Hz {pub: in};
    var t: second {pub: in};
    var f_es_min: Hz {pub: in};
    inv_sigma_Es = sel
      case f_esh >= f_es_min:
        -inv_G_Es*ln(f_esh-f_es_min+1{Hz});
      otherwise:
        0{dimensionless};
    endsel;
    // s.56
    var inv_Delta_Es: m6_per_J {init: 1e-7, pub: out};
    var tau_Es: second {pub: in};
    ode(inv_Delta_Es, t) = 1{dimensionless}/tau_Es*(-inv_Delta_Es+inv_sigma_Es);
    // Emaxlv_vag--------------------------------------------------------------------------------
    // s.57
    var inv_sigma_Ev: m6_per_J {pub: out};
    var inv_G_Ev: m6s_per_J {pub: in};
    var f_PNDMV_filt: Hz {pub: in};
    inv_sigma_Ev = inv_G_Ev*f_PNDMV_filt;
    // s. 58
    var inv_Delta_Ev: m6_per_J {init: -1e-7, pub: out};
    var tau_Ev: second {pub: in};
    ode(inv_Delta_Ev, t) = 1{dimensionless}/tau_Ev*(-inv_Delta_Ev+inv_sigma_Ev);
    var Delta_Emax: J_per_m6 {pub: out};
    var scale: dimensionless {pub: in};
    Delta_Emax = scale*(1{dimensionless}/inv_Delta_Es+1{dimensionless}/inv_Delta_Ev);
  enddef;
  // Emaxrv_symp ------------------------------------------------------------
enddef;
