<?xml version='1.0' encoding='UTF-8'?>
<model name="modules" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="diffusion_volume_one_species">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="C_P_init" public_interface="in" units="millimolar"/>
        <variable initial_value="C_P_init" name="C_P" public_interface="out" units="millimolar"/>
        <variable name="C_N" public_interface="in" units="millimolar"/>
        <variable name="C_S" public_interface="in" units="millimolar"/>
        <variable name="C_E" public_interface="in" units="millimolar"/>
        <variable name="C_W" public_interface="in" units="millimolar"/>
        <variable name="D_N" public_interface="out" units="m3_per_s"/>
        <variable name="D_S" public_interface="out" units="m3_per_s"/>
        <variable name="D_E" public_interface="out" units="m3_per_s"/>
        <variable name="D_W" public_interface="out" units="m3_per_s"/>
        <variable name="flux_c" public_interface="in" units="mol_per_s"/>
        <variable name="no_flux_flag_N" public_interface="in" units="dimensionless"/>
        <variable name="no_flux_flag_S" public_interface="in" units="dimensionless"/>
        <variable name="no_flux_flag_E" public_interface="in" units="dimensionless"/>
        <variable name="no_flux_flag_W" public_interface="in" units="dimensionless"/>
        <variable name="x_P" public_interface="in" units="metre"/>
        <variable name="y_P" public_interface="in" units="metre"/>
        <variable name="z_P" public_interface="in" units="metre"/>
        <variable name="y_N" public_interface="in" units="metre"/>
        <variable name="y_S" public_interface="in" units="metre"/>
        <variable name="x_E" public_interface="in" units="metre"/>
        <variable name="x_W" public_interface="in" units="metre"/>
        <variable name="sigma_diff" public_interface="in" units="m2_per_s"/>
        <variable name="V_P" public_interface="out" units="m3"/>
        <variable name="M" public_interface="in" units="millimolar_per_s"/>
        <variable name="M_reduced" public_interface="out" units="millimolar_per_s"/>
        <variable name="k_reduce" public_interface="in" units="per_millimolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>M_reduced</ci>
                <apply>
                    <times/>
                    <ci>M</ci>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <times/>
                                <apply>
                                    <minus/>
                                    <ci>k_reduce</ci>
                                </apply>
                                <ci>C_P</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>V_P</ci>
                <apply>
                    <times/>
                    <ci>x_P</ci>
                    <ci>y_P</ci>
                    <ci>z_P</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>D_N</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>no_flux_flag_N</ci>
                        <ci>sigma_diff</ci>
                        <ci>x_P</ci>
                        <ci>z_P</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <ci>y_P</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <divide/>
                            <ci>y_N</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>D_S</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>no_flux_flag_S</ci>
                        <ci>sigma_diff</ci>
                        <ci>x_P</ci>
                        <ci>z_P</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <ci>y_P</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <divide/>
                            <ci>y_S</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>D_E</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>no_flux_flag_E</ci>
                        <ci>sigma_diff</ci>
                        <ci>y_P</ci>
                        <ci>z_P</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <ci>x_P</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <divide/>
                            <ci>x_E</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>D_W</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>no_flux_flag_W</ci>
                        <ci>sigma_diff</ci>
                        <ci>y_P</ci>
                        <ci>z_P</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <ci>x_P</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <divide/>
                            <ci>x_W</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>C_P</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>D_N</ci>
                                <apply>
                                    <minus/>
                                    <ci>C_N</ci>
                                    <ci>C_P</ci>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>D_S</ci>
                                <apply>
                                    <minus/>
                                    <ci>C_S</ci>
                                    <ci>C_P</ci>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>D_E</ci>
                                <apply>
                                    <minus/>
                                    <ci>C_E</ci>
                                    <ci>C_P</ci>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>D_W</ci>
                                <apply>
                                    <minus/>
                                    <ci>C_W</ci>
                                    <ci>C_P</ci>
                                </apply>
                            </apply>
                            <ci>flux_c</ci>
                        </apply>
                        <ci>V_P</ci>
                    </apply>
                    <ci>M_reduced</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
