def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////module for simple O2 and CO2 calculation in a terminal ///
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp tissue_GE_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p_init: dimensionless {pub: in};
    var C_CO2_p_init: dimensionless {pub: in};
    var C_O2_p: dimensionless {init: C_O2_p_init, pub: out};
    var C_CO2_p: dimensionless {init: C_CO2_p_init, pub: out};
    // outflow and the gas it carries, for a flow-weighted mix downstream: j = v C (an input can't be passed on, so v_out = v)
    var v_out: m3_per_s {pub: out};
    var j_O2: m3_per_s {pub: out};
    var j_CO2: m3_per_s {pub: out};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
    v_out = v;
    j_O2 = v*C_O2_p;
    j_CO2 = v*C_CO2_p;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////module for the flow-weighted mix of the venous blood of several terminals ///
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp venous_gas_mixing as
    var t: second {pub: in};
    // totals over the connected regions (multi_port sums): flow, and the O2 and CO2 each region's outflow carries
    var v: m3_per_s {pub: in};
    var J_O2: m3_per_s {pub: in};
    var J_CO2: m3_per_s {pub: in};
    // the total flow as an output, so the downstream compartment can use it (an input can't be passed on)
    var v_mix: m3_per_s {pub: out};
    // flow-weighted mixed contents, C_mix = J v / (v^2 + eps^2) with eps = 1e-12 m3/s: equal to J / v to
    //             within (eps / v)^2 at any real flow (~1e-16 at a venous return of 1e-4 m3/s), 0 at zero flow (e.g. at
    //             t = 0) instead of 0 / 0, the flow-weighted average with the right sign when the total flow reverses,
    //             and smooth (no piecewise or abs), so the solver sees no switch
    var C_O2_mix: dimensionless {pub: out};
    var C_CO2_mix: dimensionless {pub: out};
    v_mix = v;
    C_O2_mix = J_O2*v/(v*v+1e-12{m3_per_s}*1e-12{m3_per_s});
    C_CO2_mix = J_CO2*v/(v*v+1e-12{m3_per_s}*1e-12{m3_per_s});
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////module for O2 and CO2 calculation in a pulmonary system///
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pulmonary_GE_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: out};
    var M_CO2: m3_per_s {pub: out};
    var C_O2_v: dimensionless {pub: in};
    var C_CO2_v: dimensionless {pub: in};
    var C_CO2_p_init: dimensionless {pub: in};
    var C_O2_p_init: dimensionless {pub: in};
    var C_O2_p: dimensionless {init: C_O2_p_init, pub: out};
    var d_C_O2_p_dt: Hz {pub: out};
    var C_CO2_p: dimensionless {init: C_CO2_p_init, pub: out};
    // New params
    var k_O2: m6_per_Js {pub: in};
    var k_CO2: m6_per_Js {pub: in};
    var P_O2_A: J_per_m3 {pub: in};
    var P_CO2_A: J_per_m3 {pub: in};
    var shunt_fraction: dimensionless {pub: in};
    // New vars
    var P_O2_p: J_per_m3 {pub: out};
    var P_CO2_p: J_per_m3 {pub: out};
    var C_O2_a: dimensionless {pub: out};
    var C_CO2_a: dimensionless {pub: out};
    var v_p: m3_per_s {pub: out};
    var v_sh: m3_per_s {pub: out};
    M_O2 = k_O2*(P_O2_A-P_O2_p);
    M_CO2 = k_CO2*(P_CO2_A-P_CO2_p);
    ode(C_O2_p, t) = (v_p*(C_O2_v-C_O2_p)+M_O2)/q_0;
    d_C_O2_p_dt = (v_p*(C_CO2_v-C_CO2_p)+M_CO2)/q_0;
    ode(C_CO2_p, t) = d_C_O2_p_dt;
    // from inverted dissociation
    P_O2_p = r_1+sqrt(sqr(r_1)-s_1)+overcap_solubility*C_O2_p_extra_ub;
    P_CO2_p = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    // flows from shunt todo model this??
    v_p = v*(1{dimensionless}-shunt_fraction);
    v_sh = v*shunt_fraction;
    // calculate arterial gas concentration due to pulmonary shunt
    // the 0 should be dimensionless (m3_per_s -> dim)
    C_O2_a = max((v_p*C_O2_p+v_sh*C_O2_v)/v, 0{dimensionless});
    C_CO2_a = max((v_p*C_CO2_p+v_sh*C_CO2_v)/v, 0{dimensionless});
    // ____________ inverted dissociation curve below here___________
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    // including the below to avoid divide by zero problems. This probably isn't needed.
    var C_O2_p_capped: dimensionless {pub: out};
    var C_CO2_p_capped: dimensionless {pub: out};
    var C_O2_p_extra_ub: dimensionless {pub: out};
    var overcap_solubility: J_per_m3 {pub: in};
    var saturation_cap: dimensionless {pub: in};
    C_O2_p_capped = min(C_O2_sat*saturation_cap, C_O2_p);
    C_CO2_p_capped = min(C_CO2_sat*saturation_cap, C_CO2_p);
    // This is the amount that is extra in the plasma due to capping the amount that can be saturated.
    C_O2_p_extra_ub = max(C_O2_p-C_O2_sat*saturation_cap, 0{dimensionless});
    d_1 = max(k_1*pow(C_O2_p_capped/(C_O2_sat-C_O2_p_capped), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_p_capped/(C_CO2_sat-C_CO2_p_capped), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp pulmonary_GE_5_lobe_type as
    var saturation_cap: dimensionless {pub: in};
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var v_1: m3_per_s {pub: in};
    var v_2: m3_per_s {pub: in};
    var v_3: m3_per_s {pub: in};
    var v_4: m3_per_s {pub: in};
    var v_5: m3_per_s {pub: in};
    var v: m3_per_s {pub: out};
    var M_O2: m3_per_s {pub: out};
    var M_CO2: m3_per_s {pub: out};
    var C_O2_v: dimensionless {pub: in};
    var C_CO2_v: dimensionless {pub: in};
    var C_CO2_p_init: dimensionless {pub: in};
    var C_O2_p_init: dimensionless {pub: in};
    var C_O2_p: dimensionless {init: C_O2_p_init, pub: out};
    var C_CO2_p: dimensionless {init: C_CO2_p_init, pub: out};
    // New params
    var k_O2: m6_per_Js {pub: in};
    var k_CO2: m6_per_Js {pub: in};
    var P_O2_A: J_per_m3 {pub: in};
    var P_CO2_A: J_per_m3 {pub: in};
    var shunt_fraction: dimensionless {pub: in};
    // New vars
    var P_O2_p: J_per_m3 {pub: out};
    var P_CO2_p: J_per_m3 {pub: out};
    var C_O2_a: dimensionless {pub: out};
    var C_CO2_a: dimensionless {pub: out};
    var v_p: m3_per_s {pub: out};
    var v_sh: m3_per_s {pub: out};
    M_O2 = k_O2*(P_O2_A-P_O2_p);
    M_CO2 = k_CO2*(P_CO2_A-P_CO2_p);
    ode(C_O2_p, t) = (v_p*(C_O2_v-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v_p*(C_CO2_v-C_CO2_p)+M_CO2)/q_0;
    // from inverted dissociation
    P_O2_p = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_p = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    // sum love flows for now
    v = v_1+v_2+v_3+v_4+v_5;
    // flows from shunt todo model this??
    v_p = v*(1{dimensionless}-shunt_fraction);
    v_sh = v*shunt_fraction;
    // calculate arterial gas concentration due to pulmonary shunt
    C_O2_a = max((v_p*C_O2_p+v_sh*C_O2_v)/v, 0{m3_per_s});
    C_CO2_a = max((v_p*C_CO2_p+v_sh*C_CO2_v)/v, 0{m3_per_s});
    // ____________ inverted dissociation curve below here___________
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    // including the below to avoid divide by zero problems.
    // TODO this is a temporary fix, we should switch to using the DASH equations
    var C_O2_p_capped: dimensionless {pub: out};
    var C_CO2_p_capped: dimensionless {pub: out};
    C_O2_p_capped = min(C_O2_sat*saturation_cap, C_O2_p);
    C_CO2_p_capped = min(C_CO2_sat*saturation_cap, C_CO2_p);
    d_1 = max(k_1*pow(C_O2_p_capped/(C_O2_sat-C_O2_p_capped), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_p_capped/(C_CO2_sat-C_CO2_p_capped), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp gas_transport_simple_type as
    var t: second {pub: in};
    var C_O2_in: dimensionless {pub: in};
    var C_CO2_in: dimensionless {pub: in};
    var C_CO2_out_init: dimensionless {pub: in};
    var C_O2_out_init: dimensionless {pub: in};
    var C_O2_out: dimensionless {init: C_O2_out_init, pub: out};
    var C_CO2_out: dimensionless {init: C_CO2_out_init, pub: out};
    var dot_C_CO2_out: per_s {pub: out};
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
    ode(C_O2_out, t) = v*(C_O2_in-C_O2_out)/q_0;
    dot_C_CO2_out = v*(C_CO2_in-C_CO2_out)/q_0;
    ode(C_CO2_out, t) = dot_C_CO2_out;
    // from inverted dissociation
    var P_O2_out: J_per_m3 {pub: out};
    var P_CO2_out: J_per_m3 {pub: out};
    P_O2_out = r_1+sqrt(sqr(r_1)-s_1)+overcap_solubility*C_O2_out_extra_ub;
    P_CO2_out = d_2*(1{dimensionless}+alpha_2*P_O2_out)/(1{dimensionless}+beta_2*P_O2_out);
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    // including the below to avoid divide by zero problems.
    var C_O2_out_capped: dimensionless {pub: out};
    var C_CO2_out_capped: dimensionless {pub: out};
    var C_O2_out_extra_ub: dimensionless {pub: out};
    var overcap_solubility: J_per_m3 {pub: in};
    var saturation_cap: dimensionless {pub: in};
    C_O2_out_capped = min(C_O2_sat*saturation_cap, C_O2_out);
    C_CO2_out_capped = min(C_CO2_sat*saturation_cap, C_CO2_out);
    // This is the amount that is extra in the plasma due to capping the amount that can be saturated.
    C_O2_out_extra_ub = max(C_O2_out-C_O2_sat*saturation_cap, 0{dimensionless});
    d_1 = max(k_1*pow(C_O2_out_capped/(C_O2_sat-C_O2_out_capped), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_out_capped/(C_CO2_sat-C_CO2_out_capped), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp respiratory_gas_transport_type as
    var t: second {pub: in};
    // constants
    var F_O2_i: dimensionless {pub: in};
    var F_CO2_i: dimensionless {pub: in};
    var P_atm: J_per_m3 {pub: in};
    var P_ws: J_per_m3 {pub: in};
    var F_O2_D_init: dimensionless {pub: in};
    var F_O2_A_init: dimensionless {pub: in};
    var F_CO2_D_init: dimensionless {pub: in};
    var F_CO2_A_init: dimensionless {pub: in};
    // This K causes a loss in mass? fix when turning into bond-graph
    var K_LOSSES: dimensionless {pub: in};
    // volume fractions
    var F_O2_D: dimensionless {init: F_O2_D_init, pub: out};
    var F_CO2_D: dimensionless {init: F_CO2_D_init, pub: out};
    var F_O2_A: dimensionless {init: F_O2_A_init, pub: out};
    var F_CO2_A: dimensionless {init: F_CO2_A_init, pub: out};
    // partial pressures, outputs to the pulmonary gas exchange model
    var P_O2_A: J_per_m3 {pub: out};
    var P_CO2_A: J_per_m3 {pub: out};
    // inputs from lung model
    var v_ml: m3_per_s {pub: in};
    var v_bA: m3_per_s {pub: in};
    var q_D: m3 {pub: in};
    var q_A: m3 {pub: in};
    // inputs from pulmonary gas exchange model
    var M_O2: m3_per_s {pub: in};
    var M_CO2: m3_per_s {pub: in};
    ode(F_O2_D, t) = (max(v_ml, 0{m3_per_s})*(F_O2_i-F_O2_D)-max(-v_bA, 0{m3_per_s})*(F_O2_D-F_O2_A))/q_D;
    ode(F_CO2_D, t) = (max(v_ml, 0{m3_per_s})*(F_CO2_i-F_CO2_D)-max(-v_bA, 0{m3_per_s})*(F_CO2_D-F_CO2_A))/q_D;
    ode(F_O2_A, t) = (max(v_bA, 0{m3_per_s})*(F_O2_D-F_O2_A)-K_LOSSES*M_O2)/q_A;
    ode(F_CO2_A, t) = (max(v_bA, 0{m3_per_s})*(F_CO2_D-F_CO2_A)-K_LOSSES*M_CO2)/q_A;
    P_O2_A = F_O2_A*(P_atm-P_ws);
    P_CO2_A = F_CO2_A*(P_atm-P_ws);
  enddef;

  def comp temp as
    var v: m3_per_s {pub: in};
    var C_O2_in: dimensionless {init: 0.18, pub: in};
    var C_O2_out: dimensionless {init: 0.18, pub: out};
    C_O2_out = (v*C_O2_in+v*C_O2_out)/(v+v);
  enddef;

  def comp capillary_GE as
    var saturation_cap: dimensionless {pub: in};
    var t: second {pub: in};
    var C_O2_c: millimolar {init: C_O2_c_init, pub: out};
    var C_O2_c_init: millimolar {pub: in};
    var C_O2_v: millimolar {pub: out};
    var P_O2_c: mmHg {pub: out};
    var P_CO2_c: mmHg {pub: out};
    var v_out: m3_per_s {pub: in};
    var L: metre {pub: in};
    var r: metre {pub: in};
    var V: m3 {pub: in};
    // unbound concentrations
    var ub_O2_c: millimolar {pub: out};
    var ub_O2_t: millimolar {pub: in};
    var ub_CO2_c: millimolar {pub: out};
    // CO2 constant for now
    // TODO improve this
    var C_CO2_c: millimolar {pub: out};
    var C_CO2_v: millimolar {pub: out};
    C_CO2_c = C_CO2_a;
    // temporary
    ub_CO2_v = ub_CO2_c;
    // permeability of capillary membrane constant
    var perm_O2: m_per_s {pub: in};
    // solubility constants
    var S_O2: mol_per_m3_per_Pa {pub: in};
    var S_CO2: mol_per_m3_per_Pa {pub: in};
    // exponential approx variables
    var alpha: dimensionless {pub: out};
    var W_pade_approx: dimensionless {pub: out};
    var k_xdecay: per_m {pub: out};
    var C_0: dimensionless {pub: out};
    // flux to tissue
    var flux_O2_c: mol_per_s {pub: out};
    var D_O2: m3_per_s {pub: out};
    D_O2 = 2{dimensionless}*pi*r*L*perm_O2;
    flux_O2_c = D_O2*(ub_O2_c-ub_O2_t);
    // equation for O2 concentration
    ode(C_O2_c, t) = (v_in*C_O2_a-v_out*C_O2_v-flux_O2_c)/V;
    // calculate CO2_v from exponential decreasing concentration assumption.
    C_0 = (C_O2_c-ub_O2_t)/(C_O2_a-ub_O2_t);
    alpha = -exp(-1{dimensionless}/C_0)/C_0;
    W_pade_approx = ln(1{dimensionless}+alpha)*(1{dimensionless}+123{dimensionless}/40{dimensionless}*alpha+21{dimensionless}/10{dimensionless}*sqr(alpha))/(1{dimensionless}+143{dimensionless}/40{dimensionless}*alpha+713{dimensionless}/240{dimensionless}*sqr(alpha));
    k_xdecay = (1{dimensionless}+C_0*W_pade_approx)/(C_0*L);
    // Now calculate the venous concentration
    var exp_threshold: millimolar {pub: in};
    ub_O2_v = sel
      case ub_O2_c < exp_threshold*ub_O2_a:
        (ub_O2_a-ub_O2_t)*exp(-k_xdecay*L)+ub_O2_t;
      case (ub_O2_c >= exp_threshold*ub_O2_a) and (ub_O2_c < ub_O2_a):
        2{dimensionless}*ub_O2_c-ub_O2_a;
      otherwise:
        ub_O2_c;
    endsel;
    // linear if C_O2_c is close.
    // ===================================== inverted dissociation curves ======================================
    var k_1: mmHg {pub: in};
    var k_2: mmHg {pub: in};
    var a_1: dimensionless {pub: in};
    var a_2: dimensionless {pub: in};
    var d_1: mmHg {pub: out};
    var d_2: mmHg {pub: out};
    var r_1: mmHg {pub: out};
    var r_2: mmHg {pub: out};
    var s_1: mmHg2 {pub: out};
    var s_2: mmHg2 {pub: out};
    var alpha_1: per_mmHg {pub: in};
    var alpha_2: per_mmHg {pub: in};
    var beta_1: per_mmHg {pub: in};
    var beta_2: per_mmHg {pub: in};
    var C_O2_sat: mol_per_m3 {pub: in};
    var C_CO2_sat: mol_per_m3 {pub: in};
    var C_O2_c_capped: dimensionless {pub: out};
    var C_CO2_c_capped: dimensionless {pub: out};
    C_O2_c_capped = min(C_O2_sat*saturation_cap, C_O2_c);
    C_CO2_c_capped = min(C_CO2_sat*saturation_cap, C_CO2_c);
    // curve equations
    d_1 = max(k_1*pow(C_O2_c_capped/(C_O2_sat-C_O2_c_capped), a_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_c_capped/(C_CO2_sat-C_CO2_c_capped), a_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    // equations for pressures and unbound gas concentrations from inverted dissociation curve and solubility coefficients
    P_O2_c = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_c = r_2+sqrt(sqr(r_2)-s_2);
    ub_O2_c = 133.32{Pa_per_mmHg}*P_O2_c*S_O2;
    ub_CO2_c = 133.32{Pa_per_mmHg}*P_CO2_c*S_CO2;
    // todo the below conversion for arterial shouldn't be done as it's calculated in the upstream module)
    var d_1_a: mmHg {pub: out};
    var d_2_a: mmHg {pub: out};
    var r_1_a: mmHg {pub: out};
    var r_2_a: mmHg {pub: out};
    var s_1_a: mmHg2 {pub: out};
    var s_2_a: mmHg2 {pub: out};
    var ub_O2_a: mM {pub: out};
    var ub_CO2_a: mM {pub: out};
    var P_O2_a: mmHg {pub: out};
    var P_CO2_a: mmHg {pub: out};
    var C_O2_a_capped: dimensionless {pub: out};
    var C_CO2_a_capped: dimensionless {pub: out};
    C_O2_a_capped = min(C_O2_sat*saturation_cap, C_O2_a);
    C_CO2_a_capped = min(C_CO2_sat*saturation_cap, C_CO2_a);
    d_1_a = max(k_1*pow(C_O2_a_capped/(C_O2_sat-C_O2_a_capped), a_1), 0{J_per_m3});
    d_2_a = max(k_2*pow(C_CO2_a_capped/(C_CO2_sat-C_CO2_a_capped), a_2), 0{J_per_m3});
    r_1_a = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2_a-beta_2*d_1_a-alpha_1*alpha_2*d_1_a*d_2_a)/(beta_2+alpha_2*beta_1*d_2_a);
    r_2_a = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1_a-beta_1*d_2_a-alpha_2*alpha_1*d_2_a*d_1_a)/(beta_1+alpha_1*beta_2*d_1_a);
    s_1_a = -1{dimensionless}*(d_1_a+alpha_1*d_1_a*d_2_a)/(beta_2+alpha_2*beta_1*d_2_a);
    s_2_a = -1{dimensionless}*(d_2_a+alpha_2*d_2_a*d_1_a)/(beta_1+alpha_1*beta_2*d_1_a);
    P_O2_a = r_1_a+sqrt(sqr(r_1_a)-s_1_a);
    P_CO2_a = r_2_a+sqrt(sqr(r_2_a)-s_2_a);
    ub_O2_a = 133.32{Pa_per_mmHg}*P_O2_a*S_O2;
    ub_CO2_a = 133.32{Pa_per_mmHg}*P_CO2_a*S_CO2;
    // ------------------ dissociation curves for downstream content
    // need to determine units for f_1 and f_2
    var f_1: dimensionless {pub: out};
    var f_2: dimensionless {pub: out};
    var P_O2_v: mmHg {pub: out};
    var P_CO2_v: mmHg {pub: out};
    var ub_O2_v: mM {pub: out};
    var ub_CO2_v: mM {pub: out};
    P_O2_v = ub_O2_v/(S_O2*133.32{Pa_per_mmHg});
    P_CO2_v = ub_CO2_v/(S_CO2*133.32{Pa_per_mmHg});
    // curve equations
    C_O2_v = C_O2_sat*pow(f_1, 1{dimensionless}/a_1)/(1{dimensionless}+pow(f_1, 1{dimensionless}/a_1));
    C_CO2_v = C_CO2_sat*pow(f_2, 1{dimensionless}/a_2)/(1{dimensionless}+pow(f_2, 1{dimensionless}/a_2));
    f_1 = P_O2_v*(1{dimensionless}+beta_1*P_CO2_v)/(k_1*(1{dimensionless}+alpha_1*P_CO2_v));
    f_2 = P_CO2_v*(1{dimensionless}+beta_2*P_O2_v)/(k_2*(1{dimensionless}+alpha_2*P_O2_v));
    // Only difference to below module below
    var v_in: m3_per_s {pub: in};
    var C_CO2_a: millimolar {pub: in};
    var C_O2_a: millimolar {pub: in};
  enddef;

  def comp capillary_GE_merge as
    var t: second {pub: in};
    var C_O2_c: millimolar {init: C_O2_c_init, pub: out};
    var C_O2_c_init: millimolar {pub: in};
    var C_O2_v: millimolar {pub: out};
    var P_O2_c: mmHg {pub: out};
    var P_CO2_c: mmHg {pub: out};
    var v_out: m3_per_s {pub: in};
    var L: metre {pub: in};
    var r: metre {pub: in};
    var V: m3 {pub: in};
    // unbound concentrations
    var ub_O2_c: millimolar {pub: out};
    var ub_O2_t: millimolar {pub: in};
    var ub_CO2_c: millimolar {pub: out};
    // CO2 constant for now
    // TODO improve this
    var C_CO2_c: millimolar {pub: out};
    var C_CO2_v: millimolar {pub: out};
    C_CO2_c = C_CO2_a;
    // temporary
    ub_CO2_v = ub_CO2_c;
    // permeability of capillary membrane constant
    var perm_O2: m_per_s {pub: in};
    // solubility constants
    var S_O2: mol_per_m3_per_Pa {pub: in};
    var S_CO2: mol_per_m3_per_Pa {pub: in};
    // exponential approx variables
    var alpha: dimensionless {pub: out};
    var W_pade_approx: dimensionless {pub: out};
    var k_xdecay: per_m {pub: out};
    var C_0: dimensionless {pub: out};
    // flux to tissue
    var flux_O2_c: mol_per_s {pub: out};
    var D_O2: m3_per_s {pub: out};
    D_O2 = 2{dimensionless}*pi*r*L*perm_O2;
    flux_O2_c = D_O2*(ub_O2_c-ub_O2_t);
    // equation for O2 concentration
    ode(C_O2_c, t) = (v_in*C_O2_a-v_out*C_O2_v-flux_O2_c)/V;
    // calculate CO2_v from exponential decreasing concentration assumption.
    C_0 = (C_O2_c-ub_O2_t)/(C_O2_a-ub_O2_t);
    alpha = -exp(-1{dimensionless}/C_0)/C_0;
    W_pade_approx = ln(1{dimensionless}+alpha)*(1{dimensionless}+123{dimensionless}/40{dimensionless}*alpha+21{dimensionless}/10{dimensionless}*sqr(alpha))/(1{dimensionless}+143{dimensionless}/40{dimensionless}*alpha+713{dimensionless}/240{dimensionless}*sqr(alpha));
    k_xdecay = (1{dimensionless}+C_0*W_pade_approx)/(C_0*L);
    // Now calculate the venous concentration
    var exp_threshold: millimolar {pub: in};
    ub_O2_v = sel
      case ub_O2_c < exp_threshold*ub_O2_a:
        (ub_O2_a-ub_O2_t)*exp(-k_xdecay*L)+ub_O2_t;
      case (ub_O2_c >= exp_threshold*ub_O2_a) and (ub_O2_c < ub_O2_a):
        2{dimensionless}*ub_O2_c-ub_O2_a;
      otherwise:
        ub_O2_c;
    endsel;
    // linear if C_O2_c is close.
    // ===================================== inverted dissociation curves ======================================
    var k_1: mmHg {pub: in};
    var k_2: mmHg {pub: in};
    var a_1: dimensionless {pub: in};
    var a_2: dimensionless {pub: in};
    var d_1: mmHg {pub: out};
    var d_2: mmHg {pub: out};
    var r_1: mmHg {pub: out};
    var r_2: mmHg {pub: out};
    var s_1: mmHg2 {pub: out};
    var s_2: mmHg2 {pub: out};
    var alpha_1: per_mmHg {pub: in};
    var alpha_2: per_mmHg {pub: in};
    var beta_1: per_mmHg {pub: in};
    var beta_2: per_mmHg {pub: in};
    var C_O2_sat: mol_per_m3 {pub: in};
    var C_CO2_sat: mol_per_m3 {pub: in};
    var C_O2_c_capped: dimensionless {pub: out};
    var C_CO2_c_capped: dimensionless {pub: out};
    C_O2_c_capped = min(C_O2_sat*saturation_cap, C_O2_c);
    C_CO2_c_capped = min(C_CO2_sat*saturation_cap, C_CO2_c);
    // curve equations
    d_1 = max(k_1*pow(C_O2_c_capped/(C_O2_sat-C_O2_c_capped), a_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_c_capped/(C_CO2_sat-C_CO2_c_capped), a_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    // equations for pressures and unbound gas concentrations from inverted dissociation curve and solubility coefficients
    P_O2_c = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_c = r_2+sqrt(sqr(r_2)-s_2);
    ub_O2_c = 133.32{Pa_per_mmHg}*P_O2_c*S_O2;
    ub_CO2_c = 133.32{Pa_per_mmHg}*P_CO2_c*S_CO2;
    // todo the below conversion for arterial shouldn't be done as it's calculated in the upstream module)
    var d_1_a: mmHg {pub: out};
    var d_2_a: mmHg {pub: out};
    var r_1_a: mmHg {pub: out};
    var r_2_a: mmHg {pub: out};
    var s_1_a: mmHg2 {pub: out};
    var s_2_a: mmHg2 {pub: out};
    var ub_O2_a: mM {pub: out};
    var ub_CO2_a: mM {pub: out};
    var P_O2_a: mmHg {pub: out};
    var P_CO2_a: mmHg {pub: out};
    // var C_O2_a_capped: dimensionless {pub: out};
    // var C_CO2_a_capped: dimensionless {pub: out};
    // C_O2_a_capped = min(C_O2_sat*saturation_cap, C_O2_a);
    // C_CO2_a_capped = min(C_CO2_sat*saturation_cap, C_CO2_a);
    d_1_a = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a_capped), a_1), 0{J_per_m3});
    d_2_a = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a_capped), a_2), 0{J_per_m3});
    r_1_a = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2_a-beta_2*d_1_a-alpha_1*alpha_2*d_1_a*d_2_a)/(beta_2+alpha_2*beta_1*d_2_a);
    r_2_a = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1_a-beta_1*d_2_a-alpha_2*alpha_1*d_2_a*d_1_a)/(beta_1+alpha_1*beta_2*d_1_a);
    s_1_a = -1{dimensionless}*(d_1_a+alpha_1*d_1_a*d_2_a)/(beta_2+alpha_2*beta_1*d_2_a);
    s_2_a = -1{dimensionless}*(d_2_a+alpha_2*d_2_a*d_1_a)/(beta_1+alpha_1*beta_2*d_1_a);
    P_O2_a = r_1_a+sqrt(sqr(r_1_a)-s_1_a);
    P_CO2_a = r_2_a+sqrt(sqr(r_2_a)-s_2_a);
    ub_O2_a = 133.32{Pa_per_mmHg}*P_O2_a*S_O2;
    ub_CO2_a = 133.32{Pa_per_mmHg}*P_CO2_a*S_CO2;
    // ------------------ dissociation curves for downstream content
    // need to determine units for f_1 and f_2
    var f_1: dimensionless {pub: out};
    var f_2: dimensionless {pub: out};
    var P_O2_v: mmHg {pub: out};
    var P_CO2_v: mmHg {pub: out};
    var ub_O2_v: mM {pub: out};
    var ub_CO2_v: mM {pub: out};
    P_O2_v = ub_O2_v/(S_O2*133.32{Pa_per_mmHg});
    P_CO2_v = ub_CO2_v/(S_CO2*133.32{Pa_per_mmHg});
    // curve equations
    C_O2_v = C_O2_sat*pow(f_1, 1{dimensionless}/a_1)/(1{dimensionless}+pow(f_1, 1{dimensionless}/a_1));
    C_CO2_v = C_CO2_sat*pow(f_2, 1{dimensionless}/a_2)/(1{dimensionless}+pow(f_2, 1{dimensionless}/a_2));
    f_1 = P_O2_v*(1{dimensionless}+beta_1*P_CO2_v)/(k_1*(1{dimensionless}+alpha_1*P_CO2_v));
    f_2 = P_CO2_v*(1{dimensionless}+beta_2*P_O2_v)/(k_2*(1{dimensionless}+alpha_2*P_O2_v));
    // -----------Only difference to above module below -------------//
    // average the incoming concentrations
    var eps: m3_per_s {init: 1e-28};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var v_in: m3_per_s {pub: out};
    var C_O2_a: millimolar {pub: out};
    var C_O2_a_1: millimolar {pub: in};
    var C_O2_a_2: millimolar {pub: in};
    var C_CO2_a: millimolar {pub: out};
    var C_CO2_a_1: millimolar {pub: in};
    var C_CO2_a_2: millimolar {pub: in};
    v_in = v_in_1+v_in_2;
    C_O2_a = (abs(v_in_1)*C_O2_a_1+abs(v_in_2)*C_O2_a_2)/(abs(v_in)+eps);
    C_CO2_a = (abs(v_in_1)*C_CO2_a_1+abs(v_in_2)*C_CO2_a_2)/(abs(v_in)+eps);
  enddef;
enddef;
