def model modules as

  def comp heart_simple_wCont as
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless;
    // var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless;
    // var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    var T_wCont: second {pub: out};
    var T_ac_wCont: second {pub: out};
    var T_ar_wCont: second {pub: out};
    var T_vc_wCont: second {pub: out};
    var T_vr_wCont: second {pub: out};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3 {pub: out};
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {pub: out};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0, pub: out};
    var zeta_puv_pre: dimensionless {init: 0, pub: out};
    var zeta_miv_pre: dimensionless {init: 0, pub: out};
    var zeta_aov_pre: dimensionless {init: 0, pub: out};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // q_lv_init sometimes gets identified, the others are set arbitrarily to zero normally,
    // identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar_wCont;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_ac_wCont-T_ar_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr_wCont;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_vc_wCont-T_vr_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T_wCont;
    mt = s-floor(s);
    // control effects Assume all subperiods scale linearly for now. TODO IMPROVE THIS
    var Delta_T: second {pub: in};
    var T_min: second {pub: in};
    T_wCont = max(T+Delta_T, T_min);
    T_ac_wCont = T_ac*T_wCont/T;
    T_ar_wCont = T_ar*T_wCont/T;
    T_vc_wCont = T_vc*T_wCont/T;
    T_vr_wCont = T_vr*T_wCont/T;
    // Elastance Functions
    // TODO FIGURE OUT A REALISTIC WAY TO CONTROL t_astart and t_vstart so that it changes with changes in period
    t_astart_norm = t_astart/T;
    // T_ac_norm = T_ac/T;
    // T_ar_norm = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm = T_vc/T;
    // T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Control from sympathetic
    var E_rv_A_wCont: J_per_m6 {pub: out};
    var E_lv_A_wCont: J_per_m6 {pub: out};
    var Delta_E_rv: J_per_m6 {pub: in};
    var Delta_E_lv: J_per_m6 {pub: in};
    E_rv_A_wCont = E_rv_A+Delta_E_rv;
    E_lv_A_wCont = E_lv_A+Delta_E_lv;
    // Intrathoracic pressure boundary condition
    var u_intraThor: J_per_m3 {pub: in};
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us)+u_intraThor;
    u_rv = (e_v*E_rv_A_wCont+E_rv_B)*(q_rv-q_rv_us)+u_intraThor;
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us)+u_intraThor;
    u_lv = (e_v*E_lv_A_wCont+E_lv_B)*(q_lv-q_lv_us)+u_intraThor;
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    var q_heart: m3 {pub: out};
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp heart_simple_wCont_ASD as
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless;
    // var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless;
    // var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    var T_wCont: second {pub: out};
    var T_ac_wCont: second {pub: out};
    var T_ar_wCont: second {pub: out};
    var T_vc_wCont: second {pub: out};
    var T_vr_wCont: second {pub: out};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3 {pub: out};
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {pub: out};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    // Atrial septal defect
    var R_ASD: Js_per_m6 {pub: in};
    var v_asd: m3_per_s {pub: out};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0, pub: out};
    var zeta_puv_pre: dimensionless {init: 0, pub: out};
    var zeta_miv_pre: dimensionless {init: 0, pub: out};
    var zeta_aov_pre: dimensionless {init: 0, pub: out};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // q_lv_init sometimes gets identified, the others are set arbitrarily to zero normally,
    // identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar_wCont;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_ac_wCont-T_ar_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr_wCont;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_vc_wCont-T_vr_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T_wCont;
    mt = s-floor(s);
    // control effects Assume all subperiods scale linearly for now. TODO IMPROVE THIS
    var Delta_T: second {pub: in};
    var T_min: second {pub: in};
    T_wCont = max(T+Delta_T, T_min);
    T_ac_wCont = T_ac*T_wCont/T;
    T_ar_wCont = T_ar*T_wCont/T;
    T_vc_wCont = T_vc*T_wCont/T;
    T_vr_wCont = T_vr*T_wCont/T;
    // Elastance Functions
    // TODO FIGURE OUT A REALISTIC WAY TO CONTROL t_astart and t_vstart so that it changes with changes in period
    t_astart_norm = t_astart/T;
    // T_ac_norm = T_ac/T;
    // T_ar_norm = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm = T_vc/T;
    // T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Control from sympathetic
    var E_rv_A_wCont: J_per_m6 {pub: out};
    var E_lv_A_wCont: J_per_m6 {pub: out};
    var Delta_E_rv: J_per_m6 {pub: in};
    var Delta_E_lv: J_per_m6 {pub: in};
    E_rv_A_wCont = E_rv_A+Delta_E_rv;
    E_lv_A_wCont = E_lv_A+Delta_E_lv;
    // Intrathoracic pressure boundary condition
    var u_intraThor: J_per_m3 {pub: in};
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us)+u_intraThor;
    u_rv = (e_v*E_rv_A_wCont+E_rv_B)*(q_rv-q_rv_us)+u_intraThor;
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us)+u_intraThor;
    u_lv = (e_v*E_lv_A_wCont+E_lv_B)*(q_lv-q_lv_us)+u_intraThor;
    // Atrial septal defect: linear shunt flow, positive left-to-right
    v_asd = (u_la-u_ra)/R_ASD;
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc+v_asd-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv-v_asd;
    ode(q_lv, t) = v_miv-v_aov;
    var q_heart: m3 {pub: out};
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp heart_nonstiff as
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless;
    // var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless;
    // var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    var T_wCont: second {pub: out};
    var T_ac_wCont: second {pub: out};
    var T_ar_wCont: second {pub: out};
    var T_vc_wCont: second {pub: out};
    var T_vr_wCont: second {pub: out};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3 {pub: out};
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {pub: out};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var v_ref_trv: m3_per_s {pub: in};
    var v_ref_puv: m3_per_s {pub: in};
    var v_ref_miv: m3_per_s {pub: in};
    var v_ref_aov: m3_per_s {pub: in};
    var R_lin_trv: Js_per_m6 {pub: out};
    var R_lin_puv: Js_per_m6 {pub: out};
    var R_lin_miv: Js_per_m6 {pub: out};
    var R_lin_aov: Js_per_m6 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0, pub: out};
    var zeta_puv_pre: dimensionless {init: 0, pub: out};
    var zeta_miv_pre: dimensionless {init: 0, pub: out};
    var zeta_aov_pre: dimensionless {init: 0, pub: out};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // q_lv_init sometimes gets identified, the others are set arbitrarily to zero normally,
    // identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar_wCont;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_ac_wCont-T_ar_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr_wCont;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_vc_wCont-T_vr_wCont);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T_wCont;
    mt = s-floor(s);
    // control effects Assume all subperiods scale linearly for now. TODO IMPROVE THIS
    var Delta_T: second {pub: in};
    var T_min: second {pub: in};
    T_wCont = max(T+Delta_T, T_min);
    T_ac_wCont = T_ac*T_wCont/T;
    T_ar_wCont = T_ar*T_wCont/T;
    T_vc_wCont = T_vc*T_wCont/T;
    T_vr_wCont = T_vr*T_wCont/T;
    // Elastance Functions
    // TODO FIGURE OUT A REALISTIC WAY TO CONTROL t_astart and t_vstart so that it changes with changes in period
    t_astart_norm = t_astart/T;
    // T_ac_norm = T_ac/T;
    // T_ar_norm = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm = T_vc/T;
    // T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // Linearized valve resistance (R_lin = 2*B*v_ref; IMEX equivalent of -B*v*|v|)
    R_lin_trv = 2{dimensionless}*B_trv*v_ref_trv;
    R_lin_puv = 2{dimensionless}*B_puv*v_ref_puv;
    R_lin_miv = 2{dimensionless}*B_miv*v_ref_miv;
    R_lin_aov = 2{dimensionless}*B_aov*v_ref_aov;
    // calculate the flow through the valves
    ode(v_trv, t) = (-R_lin_trv*v_trv+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-R_lin_puv*v_puv+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-R_lin_miv*v_miv+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-R_lin_aov*v_aov+u_lv-u_root)/L_aov;
    // Control from sympathetic
    var E_rv_A_wCont: J_per_m6 {pub: out};
    var E_lv_A_wCont: J_per_m6 {pub: out};
    var Delta_E_rv: J_per_m6 {pub: in};
    var Delta_E_lv: J_per_m6 {pub: in};
    E_rv_A_wCont = E_rv_A+Delta_E_rv;
    E_lv_A_wCont = E_lv_A+Delta_E_lv;
    // Intrathoracic pressure boundary condition
    var u_intraThor: J_per_m3 {pub: in};
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us)+u_intraThor;
    u_rv = (e_v*E_rv_A_wCont+E_rv_B)*(q_rv-q_rv_us)+u_intraThor;
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us)+u_intraThor;
    u_lv = (e_v*E_lv_A_wCont+E_lv_B)*(q_lv-q_lv_us)+u_intraThor;
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    var q_heart: m3 {pub: out};
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp heart_simple as
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless {pub: out};
    // var T_ar_norm: dimensionless {pub: out};
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless;
    // var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3 {pub: out};
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {pub: out};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0, pub: out};
    var zeta_puv_pre: dimensionless {init: 0, pub: out};
    var zeta_miv_pre: dimensionless {init: 0, pub: out};
    var zeta_aov_pre: dimensionless {init: 0, pub: out};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    var q: m3 {pub: out};
    q = q_lv+q_rv+q_la+q_ra;
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_ac-T_ar);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_vc-T_vr);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    // T_ac_norm     = T_ac/T;
    // T_ar_norm     = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm     = T_vc/T;
    // T_vr_norm     = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    var q_heart: m3 {pub: out};
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp heart_Ca_input as
    // Warning this module should not be used if you are varying period, without also varying the T_ar, T_ac, T_vr, T_vc
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    // ______ (PETER) Delete from here __________
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless {pub: out};
    // var T_ar_norm: dimensionless {pub: out};
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless {pub: out};
    // var T_vr_norm: dimensionless {pub: out};
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    // _____ (PETER) TO here ______________
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3 {pub: out};
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {pub: out};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0, pub: out};
    var zeta_puv_pre: dimensionless {init: 0, pub: out};
    var zeta_miv_pre: dimensionless {init: 0, pub: out};
    var zeta_aov_pre: dimensionless {init: 0, pub: out};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    // ____________ PETER DELETE FROM HERE ______________
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    // TODO update all heart models to have the below chi calculations, it is more numerically robust.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_ac-T_ar);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_vc-T_vr);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    // T_ac_norm     = T_ac/T;
    // T_ar_norm     = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm     = T_vc/T;
    // T_vr_norm     = T_vr/T;
    // ____________ (PETER) TO HERE ______________
    // ____________ (PETER) These are the normalised elastance functions that need to be changed to be dependent of Ca
    // When e_v equals 1 elastance equals E_lv_B (min elastance), when e_v equals 1,  elastance equals E_lv_B+E_lv_A (max elastance).
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    var q_heart: m3 {pub: out};
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp heart_new_valve as
    // heart model with unvalidated new valve model.
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless {pub: out};
    // var T_ar_norm: dimensionless {pub: out};
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless {pub: out};
    // var T_vr_norm: dimensionless {pub: out};
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3 {pub: out};
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {pub: out};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0, pub: out};
    var zeta_puv_pre: dimensionless {init: 0, pub: out};
    var zeta_miv_pre: dimensionless {init: 0, pub: out};
    var zeta_aov_pre: dimensionless {init: 0, pub: out};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_ac-T_ar);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_vc-T_vr);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    // T_ac_norm     = T_ac/T;
    // T_ar_norm     = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm     = T_vc/T;
    // T_vr_norm     = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    var Rmod_valve_trv: dimensionless {pub: in};
    var Rmod_valve_puv: dimensionless {pub: in};
    var Rmod_valve_aov: dimensionless {pub: in};
    var Rmod_valve_miv: dimensionless {pub: in};
    B_trv = Rmod_valve_trv*rho/(A_eff_trv+eps_m4);
    B_puv = Rmod_valve_puv*rho/(A_eff_puv+eps_m4);
    B_miv = Rmod_valve_miv*rho/(A_eff_miv+eps_m4);
    B_aov = Rmod_valve_aov*rho/(A_eff_aov+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // calculate velocities from flow and nominal (constant) area
    var vel_trv: m_per_s {pub: out};
    var vel_puv: m_per_s {pub: out};
    var vel_miv: m_per_s {pub: out};
    var vel_aov: m_per_s {pub: out};
    vel_trv = v_trv/A_nn_trv;
    vel_puv = v_puv/A_nn_puv;
    vel_miv = v_miv/A_nn_miv;
    vel_aov = v_aov/A_nn_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    var q_heart: m3 {pub: out};
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp heart_simple_LVprop as
    // heart model where non-LV chamber elastances are all calculated from the LV elastance.
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless;
    // var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless;
    // var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    // removed in for all E
    var E_la_A: J_per_m6;
    var E_la_B: J_per_m6;
    var E_rv_A: J_per_m6;
    var E_rv_B: J_per_m6;
    var E_ra_A: J_per_m6;
    var E_ra_B: J_per_m6;
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3 {pub: out};
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3 {pub: out};
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {pub: out};
    var A_eff_puv: m2 {pub: out};
    var A_eff_miv: m2 {pub: out};
    var A_eff_aov: m2 {pub: out};
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var zeta_trv: dimensionless {pub: out};
    var zeta_puv: dimensionless {pub: out};
    var zeta_miv: dimensionless {pub: out};
    var zeta_aov: dimensionless {pub: out};
    var zeta_trv_pre: dimensionless {init: 0};
    var zeta_puv_pre: dimensionless {init: 0};
    var zeta_miv_pre: dimensionless {init: 0};
    var zeta_aov_pre: dimensionless {init: 0};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_ac-T_ar);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_vc-T_vr);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    // T_ac_norm     = T_ac/T;
    // T_ar_norm     = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm     = T_vc/T;
    // T_vr_norm     = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // calculate velocities from flow and nominal (constant) area
    var vel_trv: m_per_s {pub: out};
    var vel_puv: m_per_s {pub: out};
    var vel_miv: m_per_s {pub: out};
    var vel_aov: m_per_s {pub: out};
    vel_trv = v_trv/A_nn_trv;
    vel_puv = v_puv/A_nn_puv;
    vel_miv = v_miv/A_nn_miv;
    vel_aov = v_aov/A_nn_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_us);
    // Identify LV elastances and scale all others in relation
    E_rv_A = E_lv_A*0.8{dimensionless};
    E_ra_A = E_lv_A*0.02{dimensionless};
    E_la_A = E_lv_A*0.02{dimensionless};
    E_la_B = E_lv_B*0.9{dimensionless};
    E_ra_B = E_lv_B*0.9{dimensionless};
    E_rv_B = E_lv_B*0.6{dimensionless};
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    var q_heart: m3 {pub: out};
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp heart_devel as
    // Unvalidated heart model, with new valve model and method improve numerical inefficiency of the valve.
    var t: second {pub: in};
    var s: dimensionless {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: dimensionless {pub: out};
    var e_a: dimensionless {pub: out};
    var e_v: dimensionless {pub: out};
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless;
    // var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless {pub: out};
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless;
    // var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless {pub: out};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_us: m3 {pub: in};
    var q_rv_us: m3 {pub: in};
    var q_la_us: m3 {pub: in};
    var q_lv_us: m3 {pub: in};
    var q_ra_init: m3 {pub: in};
    var q_rv_init: m3 {pub: in};
    var q_la_init: m3 {pub: in};
    var q_lv_init: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3;
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3;
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2;
    var A_eff_puv: m2;
    var A_eff_miv: m2;
    var A_eff_aov: m2;
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: Js2_per_m9 {pub: out};
    var B_puv: Js2_per_m9 {pub: out};
    var B_miv: Js2_per_m9 {pub: out};
    var B_aov: Js2_per_m9 {pub: out};
    var zeta_trv: dimensionless;
    var zeta_puv: dimensionless;
    var zeta_miv: dimensionless;
    var zeta_aov: dimensionless;
    var zeta_trv_pre: dimensionless {init: 0};
    var zeta_puv_pre: dimensionless {init: 0};
    var zeta_miv_pre: dimensionless {init: 0};
    var zeta_aov_pre: dimensionless {init: 0};
    var eps_m4: m4 {init: 1e-22};
    var eps_m2: m2 {init: 1e-22};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    var q_lv: m3 {init: q_lv_init, pub: out};
    var q_rv: m3 {init: q_rv_init, pub: out};
    var q_la: m3 {init: q_la_init, pub: out};
    var q_ra: m3 {init: q_ra_init, pub: out};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0, pub: out};
    var chi_afloor: dimensionless {pub: out};
    var chi_afloor_final: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_ac-T_ar);
      otherwise:
        0.0{per_s};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_vc-T_vr);
      otherwise:
        0.0{per_s};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    // T_ac_norm     = T_ac/T;
    // T_ar_norm     = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm     = T_vc/T;
    // T_vr_norm     = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    var B_trv_pre: Js2_per_m9 {pub: out};
    var B_puv_pre: Js2_per_m9 {pub: out};
    var B_miv_pre: Js2_per_m9 {pub: out};
    var B_aov_pre: Js2_per_m9 {pub: out};
    B_trv_pre = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv_pre = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv_pre = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    // B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    var gamma: dimensionless {pub: in};
    var beta: dimensionless {pub: in};
    B_aov_pre = gamma*rho*pow(pi*sqr(r_ao), beta)/(pow(r_lvot, 4{dimensionless})*pow(A_eff_aov+eps_m2, beta));
    B_trv = sel
      case B_trv_pre < 1e10{dimensionless}:
        B_trv_pre;
      otherwise:
        1e10{dimensionless}+1e16{dimensionless}*(1{dimensionless}-exp(-B_trv_pre/1e16{dimensionless}));
    endsel;
    B_puv = sel
      case B_puv_pre < 1e10{dimensionless}:
        B_puv_pre;
      otherwise:
        1e10{dimensionless}+1e16{dimensionless}*(1{dimensionless}-exp(-B_puv_pre/1e16{dimensionless}));
    endsel;
    B_miv = sel
      case B_miv_pre < 1e10{dimensionless}:
        B_miv_pre;
      otherwise:
        1e10{dimensionless}+1e16{dimensionless}*(1{dimensionless}-exp(-B_miv_pre/1e16{dimensionless}));
    endsel;
    B_aov = sel
      case B_aov_pre < 1e10{dimensionless}:
        B_aov_pre;
      otherwise:
        1e10{dimensionless}+1e16{dimensionless}*(1{dimensionless}-exp(-B_aov_pre/1e16{dimensionless}));
    endsel;
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    // L_aov = rho*l_eff/(A_eff_aov + eps_m2);
    L_aov = rho*l_eff/(pi*sqr(r_lvot));
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    // A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    A_eff_aov = (M_st_aov*A_aov-M_rg_aov*A_aov)*zeta_aov+M_rg_aov*A_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // calculate velocities from flow and nominal (constant) area
    var vel_aov: m_per_s {pub: out};
    var r_lvot: metre {pub: in};
    var r_ao: metre {pub: in};
    var A_aov: m2 {pub: in};
    // A_nn_aov = A_aov;
    vel_aov = v_aov/(3{dimensionless}/4{dimensionless}*pi*sqr(r_lvot));
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    var q_heart: m3 {pub: out};
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;
enddef;
