def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////// Bond graph lung model //////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp simple_lung_bond_graph_type as
    var t: second {pub: in};
    // ______  Pressures _________
    // atmospheric/mouth pressure
    var P_m: J_per_m3 {pub: in};
    // larynx pressure
    var P_l: J_per_m3 {pub: out};
    // trachea pressure
    var P_t: J_per_m3 {pub: out};
    // bronchea pressure
    var P_b: J_per_m3 {pub: out};
    // Alveolar pressure
    var P_A: J_per_m3 {pub: out};
    // Pleural pressure
    var P_pl: J_per_m3 {pub: out};
    // resp muscle pressure
    var P_mus: J_per_m3 {pub: out};
    var P_mus_min: J_per_m3 {pub: in};
    var P_mus_min_wCont: J_per_m3 {pub: out};
    var P_plEE: J_per_m3 {pub: in};
    var Delta_P_mus: J_per_m3 {pub: in};
    // ______  volumes_________
    // larynx volume
    var q_l: m3 {init: 1.0e-2, pub: out};
    var q_t: m3 {init: 1.0e-3, pub: out};
    var q_b: m3 {init: 1.0e-3, pub: out};
    var q_A_stressed: m3 {init: 0.0, pub: out};
    var q_A: m3 {pub: out};
    var q_pl: m3 {init: 0.0, pub: out};
    var q_D: m3 {pub: out};
    var q_str: m3 {pub: out};
    // ______  flows _________
    var v_ml: m3_per_s {pub: out};
    var v_lt: m3_per_s {pub: out};
    var v_tb: m3_per_s {pub: out};
    var v_bA: m3_per_s {pub: out};
    var v_twall: m3_per_s {pub: out};
    var v_bwall: m3_per_s {pub: out};
    var v_plwall: m3_per_s {pub: out};
    // ______  Resistances_________
    var R_ml: Js_per_m6 {pub: in};
    var R_lt: Js_per_m6 {pub: in};
    var R_tb: Js_per_m6 {pub: in};
    var R_bA: Js_per_m6 {pub: in};
    var alpha_LR: dimensionless {pub: in};
    var R_plwall: Js_per_m6 {pub: in};
    // ______  Compliances_________
    var C_l: m6_per_J {pub: in};
    var C_t: m6_per_J {pub: in};
    var C_b: m6_per_J {pub: in};
    var C_A: m6_per_J {pub: in};
    var C_pl: m6_per_J {pub: in};
    // periods/times
    var t_floor: second {pub: out};
    var T_resp: second {pub: in};
    var Delta_RR_resp: per_s {pub: in};
    var T_resp_wCont: second {pub: out};
    var T_I: second {pub: out};
    var T_E: second {pub: out};
    var tau: second {pub: out};
    var IE_ratio: dimensionless {pub: in};
    // unstressed volumes
    var q_l_us: m3 {pub: in};
    var q_t_us: m3 {pub: in};
    var q_b_us: m3 {pub: in};
    var q_A_us: m3 {pub: in};
    // flags to turn control on and off
    var flag_RR_control: dimensionless {pub: in};
    var flag_P_mus_control: dimensionless {pub: in};
    // TODO check this doesn't cause issues.
    T_resp_wCont = 1{dimensionless}/(1{dimensionless}/T_resp+flag_RR_control*Delta_RR_resp);
    // We keep T_E and T_I based on T_resp, not T_resp control, then move through t_floor faster or slower
    // as calculated below.
    T_E = T_resp/(1{dimensionless}+IE_ratio);
    T_I = T_E*IE_ratio;
    tau = T_E/5{dimensionless};
    // TODO split this into submodules
    v_ml = (P_m-P_l)/(R_ml*alpha_LR);
    ode(q_l, t) = v_ml-v_lt;
    P_l = q_l/C_l;
    v_lt = (P_l-P_t)/(R_lt*alpha_LR);
    v_twall = v_lt-v_tb;
    ode(q_t, t) = v_twall;
    P_t = q_t/C_t+P_pl;
    v_tb = (P_t-P_b)/(R_tb*alpha_LR);
    v_bwall = v_tb-v_bA;
    ode(q_b, t) = v_bwall;
    P_b = q_b/C_b+P_pl;
    // removing pleural pressure from bronchioles
    // allows us to use q_b for a volume for stretch. This makes it varies about zero,
    // meaning we don't need a threshold, or the threshold can be zero.
    // However, it's not physiological, so I am trying to fix it here.
    // calculate the amount of stretched volume above baseline level.
    // assuming a quater of the way from end expiratory pressure to min is baseline.
    q_str = q_b+C_b*(P_plEE+(P_mus_min-P_plEE)/4{dimensionless});
    // TODO change lung diagram.
    v_bA = (P_b-P_A)/(R_bA*alpha_LR);
    // v_Awall = v_bA
    ode(q_A_stressed, t) = v_bA;
    P_A = q_A_stressed/C_A+P_pl;
    ode(q_pl, t) = v_plwall-v_twall-v_bwall-v_bA;
    P_pl = q_pl/C_pl;
    v_plwall = (P_mus-P_pl)/R_plwall;
    // Dead space volume
    // it shouldn't reach q_D_min but we have this here so the model doesn't crash if it does
    // should include more realistic tube laws that allow collapse instead.
    var q_D_min: m3 {pub: in};
    q_D = max(q_l+q_t+q_b+q_l_us+q_t_us+q_b_us, q_D_min);
    q_A = q_A_stressed+q_A_us;
    // TODO + unstressed volume
    var s: dimensionless {init: 0.0, pub: out};
    var s_floor: dimensionless {pub: out};
    // calculate normalised time through this period
    ode(s, t) = 1{dimensionless}/T_resp_wCont;
    s_floor = s-floor(s);
    // unnormalise (t_floor goes from 0 to T_resp, not T_resp_wCont)
    t_floor = s_floor*T_resp;
    // TODO swap this muscle model for the one used in ben tal and smith 2008
    P_mus_min_wCont = P_mus_min+flag_P_mus_control*Delta_P_mus;
    // This is the controlled end expiratiory pressure
    var P_mus_max_wCont: J_per_m3 {pub: out};
    // the unit of the 0 should be J_per_m3 instead of dimensionless
    P_mus_max_wCont = P_plEE+max(-flag_P_mus_control*Delta_P_mus, 0{J_per_m3});
    P_mus = sel
      case t_floor < T_I:
        P_mus_max_wCont-(P_mus_min_wCont-P_mus_max_wCont)/(T_I*T_E)*sqr(t_floor)+(P_mus_min_wCont-P_mus_max_wCont)*T_resp/(T_I*T_E)*t_floor;
      otherwise:
        P_mus_max_wCont+(P_mus_min_wCont-P_mus_max_wCont)/(1{dimensionless}-exp(-T_E/tau))*(exp(-(t_floor-T_I)/tau)-exp(-T_E/tau));
    endsel;
  enddef;

  def comp lung_bond_graph_Argus_Chase_type as
    var t: second {pub: in};
    // ______  Pressures _________
    // atmospheric/cpap pressure
    var P_in: J_per_m3 {pub: in};
    // mouth pressure
    var P_m: J_per_m3 {init: P_in, pub: out};
    // trachea pressure
    var P_t: J_per_m3 {pub: out};
    // bronchea pressure
    var P_b: J_per_m3 {pub: out};
    // var PEEP: J_per_m3 {pub: in};
    // Alveolar pressure
    var P_A: J_per_m3 {pub: out};
    // Pleural pressure
    var P_pl: J_per_m3 {pub: out};
    // resp muscle pressure
    var P_mus: J_per_m3 {pub: out};
    // var P_mus_min: J_per_m3 {pub: in};
    // var P_mus_min_wCont: J_per_m3 {pub: out};
    var alpha_P_mus: dimensionless {pub: in};
    var alpha_P_mus_applied: dimensionless {pub: out};
    alpha_P_mus_applied = sel
      case flag_P_mus_control == 1{dimensionless}:
        alpha_P_mus;
      otherwise:
        1.0{dimensionless};
    endsel;
    // ______  volumes_________
    // volume of tube/mask
    var q_t: m3 {init: 1.0e-3, pub: out};
    var q_b: m3 {init: 1.0e-3, pub: out};
    var q_A_stressed: m3 {init: 0.0, pub: out};
    var q_A: m3 {pub: out};
    var q_pl: m3 {init: 0.0, pub: out};
    var q_D: m3 {pub: out};
    var q_str: m3 {pub: out};
    var q_tot: m3 {pub: out};
    q_tot = q_A+q_b+q_t;
    // ______  flows _________
    var v_vm: m3_per_s {pub: out};
    var v_mt: m3_per_s {pub: out};
    var v_tb: m3_per_s {pub: out};
    var v_bA: m3_per_s {pub: out};
    var v_twall: m3_per_s {pub: out};
    var v_bwall: m3_per_s {pub: out};
    var v_plwall: m3_per_s {pub: out};
    // ______  Resistances_________
    var frac_R_bA: dimensionless {pub: in};
    // total airway resistance
    var R_tot: Js_per_m6 {pub: in};
    var R_mt: Js_per_m6 {pub: out};
    var R_tb: Js_per_m6 {pub: out};
    var R_bA: Js_per_m6 {pub: out};
    var alpha_LR: dimensionless {pub: out};
    var R_plwall: Js_per_m6 {pub: in};
    // non bronchile resistance is split evenly in airway compartments.
    R_mt = (1{dimensionless}-frac_R_bA)*R_tot/2{dimensionless};
    R_tb = R_mt;
    R_bA = frac_R_bA*R_tot;
    // ______  Compliances_________
    var C_t: m6_per_J {pub: in};
    var C_b: m6_per_J {pub: out};
    var C_A: m6_per_J {pub: out};
    var C_pl: m6_per_J {pub: in};
    var C_tot: m6_per_J {pub: in};
    var beta_C_insp_to_exp: dimensionless {pub: in};
    var alpha_C_A_to_tot: dimensionless {pub: in};
    C_A = sel
      case t_floor < T_I:
        alpha_C_A_to_tot*C_tot;
      otherwise:
        beta_C_insp_to_exp*alpha_C_A_to_tot*C_tot;
    endsel;
    C_b = (1{dimensionless}-alpha_C_A_to_tot)*C_tot;
    // periods/times
    var t_floor: second {pub: out};
    var T_resp: second {pub: in};
    var Delta_RR_resp: per_s {pub: in};
    var T_resp_wCont: second {pub: out};
    var T_I: second {pub: out};
    var T_E: second {pub: out};
    var frac_T_insp: dimensionless {pub: in};
    var frac_T_exp: dimensionless {pub: in};
    // unstressed volumes
    var q_t_us: m3 {pub: in};
    var q_b_us: m3 {pub: in};
    var q_A_us: m3 {pub: in};
    // flags to turn control on and off
    var flag_RR_control: dimensionless {pub: in};
    var flag_P_mus_control: dimensionless {pub: in};
    // TODO check this doesn't cause issues.
    T_resp_wCont = 1{dimensionless}/(1{dimensionless}/T_resp+flag_RR_control*Delta_RR_resp);
    // We keep T_E and T_I based on T_resp, not T_resp control, then move through t_floor faster or slower
    // as calculated below.
    T_E = frac_T_exp*T_resp;
    T_I = frac_T_insp*T_resp;
    // TODO split this into submodules
    var C_vent: m6_per_J {pub: in};
    var C_m: m6_per_J {pub: in};
    // mouth/mask compliance
    var R_tube: Js_per_m6 {pub: in};
    var k_p_vent: per_s {pub: in};
    var k_I_vent: per_s2 {pub: in};
    var P_err_int: Js_per_m3 {init: 0.0, pub: out};
    var P_vent: J_per_m3 {init: 0.0, pub: out};
    var alpha_vent: per_s {pub: in};
    var v_leak: m3_per_s {pub: out};
    var R_leak: Js_per_m6 {pub: in};
    var P_leak_threshold: J_per_m3 {pub: in};
    // reverse engineered controller for the ventilator.
    ode(P_err_int, t) = P_vent-P_in-alpha_vent*P_err_int;
    ode(P_vent, t) = -v_vm/C_vent-k_p_vent*(P_vent-P_in)-k_I_vent*P_err_int;
    v_vm = (P_vent-P_m)/R_tube;
    // TODO should the below be squared?
    v_leak = max(P_m-P_leak_threshold, 0.0{J_per_m3})/R_leak;
    ode(P_m, t) = (v_vm-v_mt-v_leak)/C_m;
    v_mt = (P_m-P_t)/R_mt;
    v_twall = v_mt-v_tb;
    ode(q_t, t) = v_twall;
    P_t = q_t/C_t+P_pl;
    v_tb = (P_t-P_b)/R_tb;
    v_bwall = v_tb-v_bA;
    ode(q_b, t) = v_bwall;
    P_b = q_b/C_b+P_pl;
    // TODO change lung diagram.
    v_bA = (P_b-P_A)/(R_bA*alpha_LR);
    // v_Awall = v_bA
    ode(q_A_stressed, t) = v_bA;
    // The square below comes from Morton2020Prediction
    // P_A          = sqr(q_A_stressed)/C_A+P_pl; // C_A value in square, 4e-9 was okay
    P_A = q_A_stressed/C_A+P_pl;
    ode(q_pl, t) = v_plwall-v_twall-v_bwall-v_bA;
    P_pl = q_pl/C_pl;
    v_plwall = (P_mus-P_pl)/R_plwall;
    // Dead space volume
    // it shouldn't reach q_D_min but we have this here so the model doesn't crash if it does
    // should include more realistic tube laws that allow collapse instead.
    var q_D_min: m3 {pub: in};
    q_D = max(q_t+q_b+q_t_us+q_b_us, q_D_min);
    q_A = q_A_stressed+q_A_us;
    var s: dimensionless {init: 0.0, pub: out};
    var s_floor: dimensionless {pub: out};
    // calculate normalised time through this period
    ode(s, t) = 1{dimensionless}/T_resp_wCont;
    s_floor = s-floor(s);
    // unnormalise (t_floor goes from 0 to T_resp, not T_resp_wCont)
    t_floor = s_floor*T_resp;
    // TODO create a max pressure to be controlled. We can calibrate this with FL COPD patients.
    // TODO turn the below b-spline calculation into a separate module
    var P_d: J_per_m3 {pub: out};
    var P_d_multiplier: dimensionless {pub: in};
    // TODO also need to scale k_w in lung control
    var k_w: second {pub: in};
    // coeffs
    var P_d_1: J_per_m3 {pub: in};
    var P_d_2: J_per_m3 {pub: in};
    var P_d_3: J_per_m3 {pub: in};
    var P_d_4: J_per_m3 {pub: in};
    var P_d_5: J_per_m3 {pub: in};
    var P_d_6: J_per_m3 {pub: in};
    var P_d_7: J_per_m3 {pub: in};
    var P_d_8: J_per_m3 {pub: in};
    // here we calculate the driving pressure from 8 b-spline functions.
    var phi_1_0: dimensionless {pub: out};
    var phi_2_0: dimensionless {pub: out};
    var phi_3_0: dimensionless {pub: out};
    var phi_4_0: dimensionless {pub: out};
    var phi_5_0: dimensionless {pub: out};
    var phi_6_0: dimensionless {pub: out};
    var phi_7_0: dimensionless {pub: out};
    var phi_8_0: dimensionless {pub: out};
    var phi_9_0: dimensionless {pub: out};
    var phi_10_0: dimensionless {pub: out};
    var phi_1_1: dimensionless {pub: out};
    var phi_2_1: dimensionless {pub: out};
    var phi_3_1: dimensionless {pub: out};
    var phi_4_1: dimensionless {pub: out};
    var phi_5_1: dimensionless {pub: out};
    var phi_6_1: dimensionless {pub: out};
    var phi_7_1: dimensionless {pub: out};
    var phi_8_1: dimensionless {pub: out};
    var phi_9_1: dimensionless {pub: out};
    var phi_1_2: dimensionless {pub: out};
    var phi_2_2: dimensionless {pub: out};
    var phi_3_2: dimensionless {pub: out};
    var phi_4_2: dimensionless {pub: out};
    var phi_5_2: dimensionless {pub: out};
    var phi_6_2: dimensionless {pub: out};
    var phi_7_2: dimensionless {pub: out};
    var phi_8_2: dimensionless {pub: out};
    // the below uses one more k_w than in calibration on purpose.
    // P_d should go just past T_insp (one k_w past)
    phi_1_0 = sel
      case (0{dimensionless}*k_w < t_floor) and (t_floor < 1{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    phi_2_0 = sel
      case (1{dimensionless}*k_w < t_floor) and (t_floor < 2{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    phi_3_0 = sel
      case (2{dimensionless}*k_w < t_floor) and (t_floor < 3{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    phi_4_0 = sel
      case (3{dimensionless}*k_w < t_floor) and (t_floor < 4{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    phi_5_0 = sel
      case (4{dimensionless}*k_w < t_floor) and (t_floor < 5{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    phi_6_0 = sel
      case (5{dimensionless}*k_w < t_floor) and (t_floor < 6{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    phi_7_0 = sel
      case (6{dimensionless}*k_w < t_floor) and (t_floor < 7{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    phi_8_0 = sel
      case (7{dimensionless}*k_w < t_floor) and (t_floor < 8{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    phi_9_0 = sel
      case (8{dimensionless}*k_w < t_floor) and (t_floor < 9{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    phi_10_0 = sel
      case (9{dimensionless}*k_w < t_floor) and (t_floor < 10{dimensionless}*k_w):
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    // first order
    phi_1_1 = (t_floor-0{dimensionless}*k_w)/k_w*phi_1_0+(2{dimensionless}*k_w-t_floor)/k_w*phi_2_0;
    phi_2_1 = (t_floor-1{dimensionless}*k_w)/k_w*phi_2_0+(3{dimensionless}*k_w-t_floor)/k_w*phi_3_0;
    phi_3_1 = (t_floor-2{dimensionless}*k_w)/k_w*phi_3_0+(4{dimensionless}*k_w-t_floor)/k_w*phi_4_0;
    phi_4_1 = (t_floor-3{dimensionless}*k_w)/k_w*phi_4_0+(5{dimensionless}*k_w-t_floor)/k_w*phi_5_0;
    phi_5_1 = (t_floor-4{dimensionless}*k_w)/k_w*phi_5_0+(6{dimensionless}*k_w-t_floor)/k_w*phi_6_0;
    phi_6_1 = (t_floor-5{dimensionless}*k_w)/k_w*phi_6_0+(7{dimensionless}*k_w-t_floor)/k_w*phi_7_0;
    phi_7_1 = (t_floor-6{dimensionless}*k_w)/k_w*phi_7_0+(8{dimensionless}*k_w-t_floor)/k_w*phi_8_0;
    phi_8_1 = (t_floor-7{dimensionless}*k_w)/k_w*phi_8_0+(9{dimensionless}*k_w-t_floor)/k_w*phi_9_0;
    phi_9_1 = (t_floor-8{dimensionless}*k_w)/k_w*phi_9_0+(10{dimensionless}*k_w-t_floor)/k_w*phi_10_0;
    // second order
    phi_1_2 = (t_floor-0{dimensionless}*k_w)/(2{dimensionless}*k_w)*phi_1_1+(3{dimensionless}*k_w-t_floor)/(2{dimensionless}*k_w)*phi_2_1;
    phi_2_2 = (t_floor-1{dimensionless}*k_w)/(2{dimensionless}*k_w)*phi_2_1+(4{dimensionless}*k_w-t_floor)/(2{dimensionless}*k_w)*phi_3_1;
    phi_3_2 = (t_floor-2{dimensionless}*k_w)/(2{dimensionless}*k_w)*phi_3_1+(5{dimensionless}*k_w-t_floor)/(2{dimensionless}*k_w)*phi_4_1;
    phi_4_2 = (t_floor-3{dimensionless}*k_w)/(2{dimensionless}*k_w)*phi_4_1+(6{dimensionless}*k_w-t_floor)/(2{dimensionless}*k_w)*phi_5_1;
    phi_5_2 = (t_floor-4{dimensionless}*k_w)/(2{dimensionless}*k_w)*phi_5_1+(7{dimensionless}*k_w-t_floor)/(2{dimensionless}*k_w)*phi_6_1;
    phi_6_2 = (t_floor-5{dimensionless}*k_w)/(2{dimensionless}*k_w)*phi_6_1+(8{dimensionless}*k_w-t_floor)/(2{dimensionless}*k_w)*phi_7_1;
    phi_7_2 = (t_floor-6{dimensionless}*k_w)/(2{dimensionless}*k_w)*phi_7_1+(9{dimensionless}*k_w-t_floor)/(2{dimensionless}*k_w)*phi_8_1;
    phi_8_2 = (t_floor-7{dimensionless}*k_w)/(2{dimensionless}*k_w)*phi_8_1+(10{dimensionless}*k_w-t_floor)/(2{dimensionless}*k_w)*phi_9_1;
    P_d = P_d_1*phi_1_2+P_d_2*phi_2_2+P_d_3*phi_3_2+P_d_4*phi_4_2+P_d_5*phi_5_2+P_d_6*phi_6_2+P_d_7*phi_7_2+P_d_8*phi_8_2;
    P_mus = P_d*P_d_multiplier*alpha_P_mus_applied;
    // +P_mus_max_wCont;
    //  TODO expiratory pressure.
    // otherwise:
    //    P_mus_max_wCont+(P_mus_min_wCont-P_mus_max_wCont)/(1{dimensionless}-exp(-T_E/tau))*(exp(-(t_floor-T_I)/tau)-exp(-T_E/tau));
    // endsel;
    // Here we add the nonlinear relationship with bronchiole volume for alpha TODO should this be dependednt on each vessels volume? probably
    // TODO need to think about how to set this and still use the R_total.
    alpha_LR = 1.0{dimensionless};
    // 1.0e-4{m3}/(abs(q_b)+1e-12{m3});
    // this could be the square of volume, to explore.
    // previously we used q_str below
    // removing pleural pressure from bronchioles
    // allows us to use q_b for a volume for stretch. This makes it varies about zero,
    // meaning we don't need a threshold, or the threshold can be zero.
    // However, it's not physiological, so I am trying to fix it here.
    // calculate the amount of stretched volume above baseline level.
    // assuming a quater of the way from end expiratory pressure to min is baseline.
    q_str = 1.0{m3};
    // q_b+C_b*(P_plEE+(P_mus_min-P_plEE)/4{dimensionless});
    // TODO fix this
  enddef;

  def comp thoracic_cavity as
    var t: second {pub: in};
    var P_pl: J_per_m3 {pub: in};
    var P_thor: J_per_m3 {pub: out};
    P_thor = P_pl;
  enddef;
enddef;
